PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = stroopExp
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Routines
  Routine trial
    TextComponent stim
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 2
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys [set every repeat] = 'y','r','b','g'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 2
      storeCorrect = True
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    ImageComponent cross
      image = fixation_cross.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent sync
      fillColor = white
      pos = (27, 15)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 2
      units = cm
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  Routine instruction
    TextComponent Instruction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = In this task you will see color names (red, green, blue, yellow) in different "print" colors. You need to respond which print colors is used not taking in account the content of the word.
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    KeyboardComponent interupt_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'red', 'color': 'red', 'congruent': 1, 'corrAnsw': 'r'},
      {'word': 'red', 'color': 'green', 'congruent': 0, 'corrAnsw': 'g'},
      {'word': 'green', 'color': 'green', 'congruent': 1, 'corrAnsw': 'g'},
      {'word': 'blue', 'color': 'yellow', 'congruent': 0, 'corrAnsw': 'y'},
      {'word': 'blue', 'color': 'red', 'congruent': 0, 'corrAnsw': 'r'}]
    Routine trial
  LoopTerminator trials
